<CompuCell3D Revision="20200518" Version="4.2.1">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="200" y="200" z="2"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>3</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="1" TypeName="Uninfected"/>
      <CellType Freeze="" TypeId="2" TypeName="Infected"/>
      <CellType Freeze="" TypeId="3" TypeName="VirusReleasing"/>
      <CellType Freeze="" TypeId="4" TypeName="Dead"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
</CompuCell3D>
